PsychoPy2experiment version="2021.2.3"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=131F17AD
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = CTET_freq_gain
  logging level = debug
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Routines
  Routine Response
    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = $CorrAns
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ResponseDuration
      storeCorrect = True
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  Routine Break
    TextComponent text_timeout
      color = red
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_break
      Code Type = Both
      Begin Experiment:
        timeoutTimer = core.Clock()
      Begin JS Experiment:
        timeoutTimer = new util.Clock();
      Begin JS Routine:
        timeoutTimer.reset();
        timeoutTimer.add(300);
      Begin Routine:
        timeoutTimer.reset()
        timeoutTimer.add(300)
      Each Frame:
        if timeoutTimer.getTime() >= -300:
            text_timeout.text = 'Timeout in ' + str(int(-timeoutTimer.getTime())) + ' secs'

        if timeoutTimer.getTime() >= 0:
            core.quit()
      Each JS Frame:
        if ((timeoutTimer.getTime() >= (-300))) {
            text_timeout.text = (("Timeout in " + Number.parseInt((- timeoutTimer.getTime())).toString()) + " secs");
        }
        if ((timeoutTimer.getTime() >= 0)) {
            psychoJS.quit();
        }
    KeyboardComponent key_resp_break
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_break
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for your response to the questions! If you need to take a short stretch break before starting the time-judgment task again, please go ahead now. However, if you take longer than 5 minutes before restarting the task, the experiment will time out and end automatically.

        Press <space> to continue
  Routine Response_Easy
    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'space'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ResponseDuration
      storeCorrect = True
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  Routine Response_Normal
    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'space'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ResponseDuration
      storeCorrect = True
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  Routine Stimulus_2
    ImageComponent image_4
      image [set every repeat] = $Stim
      saveStartStop = False
      size = (0.8, 0.48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = StimulusDuration
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  Routine Trial
    ImageComponent image_trial
      image [set every repeat] = $Stim
      saveStartStop = False
      size = (0.8, 0.48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = StimulusDuration
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    KeyboardComponent key_resp_trial
      correctAns = $CorrAns
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = StimulusDuration
      stopVal [duration (s)] = ResponseDuration
      storeCorrect = True
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    TextComponent Question_Mark_trial
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = StimulusDuration
      stopVal [duration (s)] = ResponseDuration
      text = ?
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    CodeComponent code_trial
      Code Type = Auto->JS
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      Begin Experiment:
        numcorr_trial=0
        rightcall_trial=0
        falsealarm_trial=0
        correctrate_trial = 0
        rightcall_rate_trial = 0
        correctrejection_rate_trial = 0
      End Routine:
        if key_resp_trial.corr:
            numcorr_trial += 1
        if key_resp_trial.corr and CorrAns == "j":
            rightcall_trial +=1
        elif key_resp_trial.corr==0 and CorrAns == "f":
            falsealarm_trial +=1
        correctrate_trial = numcorr_trial/134
        rightcall_rate_trial = rightcall_trial/16
        correctrejection_rate_trial = 1-(falsealarm_trial/118)
  Routine Training_Easy_Instr
    KeyboardComponent key_resp_easy_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_easy_instr
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see pictures of flowers. Most of them will appear for a relatively short time, but a few will be presented for longer. Your job is to press the “F” key for the pictures presented for the standard (shorter) duration, and press the “J” key for those that are presented for “too long”.

        Press the spacebar to go to the next screen.
  Routine Training_Normal_Instr
    KeyboardComponent key_resp_normal_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_normal_instr
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the next training session, the difference between the longer and shorter time will decrease. Namely, the longer time will become 1070 milliseconds, instead of the previous 1600 milliseconds. The shorter time will remain the same. Remember, “f” for short pictures and “j” for long pictures!

        Once again, we will show you how the long-duration picture is presented among short-duration ones. To demonstrate, we will present it in a short-long-short order - notice now the second picture in this series stays on a bit longer.

        Press the spacebar to see the examples.
  Routine Training_Normal
    ImageComponent image_normal
      image [set every repeat] = $Stim
      saveStartStop = False
      size = (0.8, 0.48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = StimulusDuration
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    KeyboardComponent key_resp_normal
      correctAns = $CorrAns
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = StimulusDuration
      stopVal [duration (s)] = ResponseDuration
      storeCorrect = True
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    TextComponent Question_Mark_normal
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = StimulusDuration
      stopVal [duration (s)] = ResponseDuration
      text = ?
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    CodeComponent code_normal
      Code Type = Auto->JS
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      Begin Experiment:
        numcorr_normal=0
        rightcall_normal=0
        falsealarm_normal=0
        correctrate_normal = 0
        rightcall_rate_normal = 0
        correctrejection_rate_normal = 0
        failed_normal = 0
        afternormal_loop_rep = 1
      End Routine:
        if key_resp_normal.corr and CorrAns == "j":
            numcorr_normal += 1
            rightcall_normal +=1
        elif key_resp_normal.corr==0 and CorrAns == "f":
            numcorr_normal -=1
            falsealarm_normal +=1
        correctrate_normal = numcorr_normal/4
        rightcall_rate_normal = rightcall_normal/4
        correctrejection_rate_normal = 1-(falsealarm_normal/30)
  Routine Training_Easy
    ImageComponent image_easy
      image [set every repeat] = $Stim
      saveStartStop = False
      size = (0.8, 0.48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = StimulusDuration
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    KeyboardComponent key_resp_easy
      correctAns = $CorrAns
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = StimulusDuration
      stopVal [duration (s)] = ResponseDuration
      storeCorrect = True
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    TextComponent Question_Mark
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = StimulusDuration
      stopVal [duration (s)] = ResponseDuration
      text = ?
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    CodeComponent code_easy
      Code Type = Auto->JS
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      Begin Experiment:
        rightcall_easy=0
        falsealarm_easy=0
        rightcall_rate_easy = 0
        correctrejection_rate_easy = 0
        failed_easy = 0
        numcorr_easy = 0
        correctrate_easy = 0
        aftereasy_loop_rep = 1
      End Routine:
        if key_resp_easy.corr and CorrAns == "j":
            rightcall_easy += 1
        elif key_resp_easy.corr==0 and CorrAns == "f":
            falsealarm_easy += 1
        if key_resp_easy.corr:
            numcorr_easy += 1
        correctrate_easy = numcorr_easy/34
        rightcall_rate_easy = rightcall_easy/4
        correctrejection_rate_easy = 1-(falsealarm_easy/30)
  Routine Instr5
    KeyboardComponent key_resp_instr5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instr5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Next you will go into the actual experiment. You will be completing 10 runs, with each one lasting for 4 minutes.

        Although this task is ‘easy’ in some ways, it is very sensitive to lapses of attention.  It’s ok if you make some mistakes!  However, if your performance on either the task or questionnaires is too low/looks like you were not putting a good effort, your results may be disqualified and you may not be paid.

        Press <space> to continue
  Routine Instr2
    KeyboardComponent key_resp_intro_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_intro_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Here are a couple of examples of the standard, shorter duration.  During the task, press “F” AFTER these trials, during the response period, with the question mark on the screen (not while the picture is still being presented).

        You don’t need to press anything during these examples.

        Press the spacebar to see the examples.
  Routine Example_short_easy
    ImageComponent image_easy_ex
      image [set every repeat] = $Stim
      saveStartStop = False
      size = (0.8, 0.48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = StimulusDuration
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    KeyboardComponent key_resp_easy_ex
      allowedKeys [set every repeat] = 'space'
      correctAns = $CorrAns
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = StimulusDuration
      stopVal [duration (s)] = ResponseDuration
      store = nothing
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  Routine Example_long_easy
    ImageComponent image_easy_ex_2
      image [set every repeat] = $Stim
      saveStartStop = False
      size = (0.8, 0.48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = StimulusDuration
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    KeyboardComponent key_resp_easy_ex_2
      allowedKeys [set every repeat] = 'space'
      correctAns = $CorrAns
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = StimulusDuration
      stopVal [duration (s)] = ResponseDuration
      store = nothing
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  Routine Instr3
    KeyboardComponent key_resp_intro_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_intro_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Next, you will see an example of the 1600-millisecond (longer) duration, followed by a response period.  Remember, when stimuli are presented for this duration, press “J” AFTER these trials, during the response period with the question mark on the screen (not while the picture is still being presented).

        Press the spacebar to see the examples.
  Routine Training_Easy_Start
    KeyboardComponent key_resp_easy_instr_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_easy_instr_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        We will now start with the easy training session that lasts for about 1 minute, during which you will receive feedback to become familiar with the task. Remember, press “f” for the short-duration pictures,and “j” for the long-duration ones. Make your response after the picture, when the question mark is on the screen.

        You need to reach a correct detection rate of 75% in order to move on to the other parts of the experiment. You will have two tries before moving on to the other parts.

        Press the spacebar to begin the session.
  Routine Training_Easy_Feedback
    TextComponent text_easy_feedback
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Well done! you correctly identified x/y of the targets with a z% correct rate. 
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    KeyboardComponent key_resp_easy_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_easy_feedback
      Code Type = Auto->JS
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      Begin Routine:
        text_easy_feedback.text = "You correctly identified " + str(rightcall_easy) + "/4 of the long-duration pictures, and " + str(30-falsealarm_easy) + "/30 of the short-duration pictures.\n\n"
        if correctrejection_rate_easy >= 0.75 and rightcall_rate_easy >=0.75:
            text_easy_feedback.text += "Well done! You reached the required 75% correct rate, and can now move on to the next session! Press <space> to continue"
        elif easy_repeat.thisN ==1:
            text_easy_feedback.text += "You did not reach the required 75% correct rate. Press <space> to continue"
            failed_easy=1
        else:
            text_easy_feedback.text += "You did not reach the required 75% correct rate. Press <space> to start the training again"
            prac=1
      End Routine:
        if correctrejection_rate_easy >= 0.75 and rightcall_rate_easy >=0.75:
            easy_repeat.finished = 1
            prac=0
        elif failed_easy==1:
            easy_repeat.finished = 1
            aftereasy_loop_rep = 0
            prac=0
        rightcall_easy=0
        falsealarm_easy=0
        correctrejection_rate_easy = 0
        rightcall_rate_easy = 0
  Routine Instr6
    KeyboardComponent key_resp_instr6
      allowedKeys = 'r','R'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instr6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ready to start the main task? Press the “R” key to begin running the experiment. Good luck!


        Press “f” for the short-duration pictures,and “j” for the long-duration ones, and make your response during the period when a “?” is on the screen.
  Routine PAS_Post
  Routine Final2
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_end
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you! You have completed the experiment.

        After you press space, you will be redirected back to Prolific.

        Press <space> to exit
  Routine Final1
    KeyboardComponent key_resp_end_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_end_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you! You have completed the time judgment part of the experiment.

        Next we’ll ask you just a few questions that help assess how doing such a task might have changed your mental/emotional state since starting the experiment. Just a few more things before you’re done!

        Press <space> to continue
  Routine Consent1
    TextComponent consent1_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You may choose to stop your participation at any time by pressing the Esc key on your keyboard.


        Please press the spacebar to go to the next screen.
    KeyboardComponent consent1_resp
      allowedKeys = 'space'
      correctAns = y
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SIPI_inst
    TextComponent IPI_inst_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now we’re going to ask you some questions about your attention in everyday life.
        Answer questions as they apply to your life today - not 1 or 2 or 20 years ago.

        Indicate to what extent each item applies to you, or is true for you by choosing from the five alternatives listed next:

        1. Definitely not true for me
        2. Usually not true for me
        3. Usually true for me
        4. True for me
        5. Very true for me

        (SPACEBAR to start)
    KeyboardComponent IPI_inst_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SIPI
    TextComponent SIPI_text
      letterHeight = 0.05
      pos = (0, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $SIPI_item
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    TextComponent SIPI_scale
      letterHeight = 0.05
      pos = (0, -.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1. definitely not true for me
        2. usually not true for me
        3. usually true for me
        4. true for me
        5. very true for me
    KeyboardComponent SIPI_resp
      allowedKeys = '1','2','3','4','5','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine PAS_inst
    TextComponent PAS_inst_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now we’re going to ask you some questions about how you feel right now.

        Different people react very differently to the same situations.

        You will be presented with a list of words. Indicate to what extent you feel that way right now, that is, at the present moment.

        (SPACEBAR to start)
    KeyboardComponent PAS_inst_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PAS
    TextComponent PAS_question
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $PAS_item
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    TextComponent PAS_scale
      letterHeight = 0.05
      pos = (0, -.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1. very slightly or not at all
        2. a little
        3. moderately
        4. quite a bit
        5. extremely
    KeyboardComponent PAS_resp
      allowedKeys = '1','2','3','4','5','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
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  Routine NASA_inst
    TextComponent NASA_inst_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now we are going to ask questions about your subjective mental workload during the task.

        Use your mouse to click at the point or at the interval that best indicates your experience of the task.

        There will be a short break after this questionnaire.

        (SPACEBAR to continue)
    KeyboardComponent NASA_inst_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine NASA
    TextComponent NASA_text
      letterHeight = 0.05
      pos = (0, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $nasa_question
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    SliderComponent NASA_slider
      color = $[0.992,0.992,0.992]
      forceEndRoutine = False
      granularity = 1
      labels = (0,10,20,30,40,50,60,70,80,90,100)
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.9, 0.07)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (0,10,20,30,40,50,60,70,80,90,100)
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    TextComponent labels
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Very Low                                         Very High
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    CodeComponent NASA_code
      Code Type = Auto->JS
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      Begin Experiment:
        counter = 1
      Begin Routine:
        if counter == 4:
            labels.text = "Perfect                                                 Failure"


        if counter == 9:
            counter = 0 #reset counter

        counter = counter + 1
    KeyboardComponent NASA_cont
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent NASA_cont_inst
      letterHeight = 0.04
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Use your mouse to click on the scale and press "return")
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  Routine Instr4
    KeyboardComponent key_resp_intro_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_intro_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Lastly, we will show you how the long-duration picture is presented among short-duration ones. To demonstrate, we will present it in a short-long-short order - notice now the second picture in this series stays on a bit longer.

        Press the spacebar to see the examples.
  Routine Example_sandwich_easy
    ImageComponent image_easy_ex_3
      image [set every repeat] = $Stim
      saveStartStop = False
      size = (0.8, 0.48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = StimulusDuration
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    KeyboardComponent key_resp_easy_ex_3
      allowedKeys [set every repeat] = 'space'
      correctAns = $CorrAns
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = StimulusDuration
      stopVal [duration (s)] = ResponseDuration
      store = nothing
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  Routine Example_sandwich_normal
    ImageComponent image_normal_ex
      image [set every repeat] = $Stim
      saveStartStop = False
      size = (0.8, 0.48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = StimulusDuration
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    KeyboardComponent key_resp_normal_ex
      allowedKeys [set every repeat] = 'space'
      correctAns = $CorrAns
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = StimulusDuration
      stopVal [duration (s)] = ResponseDuration
      store = nothing
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  Routine Training_Normal_Start
    KeyboardComponent key_resp_normal_instr_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_normal_instr_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        We will now go into the normal training session that lasts for about 1 minute, during which you will receive feedback to become familiar with the task. Remember, press “f” for the short-duration pictures,and “j” for the long-duration ones. Make your response after the picture, when the question mark is on the screen.

        You need to reach a correct detection rate of 75% in order to move on to the main experiment. You will have 4 tries before moving on to the main experiment.

        Press the spacebar to begin the session.
  Routine Training_Normal_Feedback
    TextComponent text_normal_feedback
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_easy_feedback_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_normal_feedback
      Code Type = Auto->JS
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      Begin Routine:
        text_normal_feedback.text = "You correctly identified " + str(rightcall_normal) + "/4 of the long-duration pictures, and " + str(30-falsealarm_normal) + "/30 of the short-duration pictures.\n\n"

        if correctrejection_rate_normal >= 0.75 and rightcall_rate_normal >=0.75:
            text_normal_feedback.text += "Well done! You can now move on to the next session, press <space> to continue"
        elif normal_repeat.thisN ==3:
            text_normal_feedback.text += "You did not reach the required 75% correct rate. Press <space> to continue"
            failed_normal = 1
        else:
            text_normal_feedback.text += "You did not reach the required 75% correct rate. Press <space> to start the training again"
            prac=1
      End Routine:
        if correctrejection_rate_normal >= 0.75 and rightcall_rate_normal >=0.75:
            normal_repeat.finished = 1
            prac=0
        elif failed_normal==1:
            normal_repeat.finished = 1
            afternormal_loop_rep = 0
            prac=0
        numcorr_normal=0
        rightcall_normal=0
        falsealarm_normal=0
        correctrate_normal = 0
        correctrejection_rate_normal = 0
        rightcall_rate_normal = 0
  Routine pracRedo
    TextComponent text_redo
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let’s redo the practice!

        Pay attention to the duration of the pictures. Press “f” for the short-duration pictures,and “j” for the long-duration ones. Make your response after the picture, when the question mark is on the screen.

        (SPACEBAR to begin)
    KeyboardComponent key_resp_redo
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine DSSQ_Pre_Inst
    TextComponent text_DSSQ_inst
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Congratulations! You have passed all the trainings. Before going into the experiment, please answer some questions about your attitude to the task you are about to do. Rate your agreement with the following statements by circling one of the following answers:

        Extremely = 4
        Very much = 3
        Somewhat = 2
        A little bit = 1
        Not at all = 0

        (SPACEBAR to start)
    KeyboardComponent key_resp_DSSQ_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine DSSQ
    TextComponent DSSQ_text
      letterHeight = 0.05
      pos = (0, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $DSSQ_item
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    TextComponent DSSQ_scale
      letterHeight = 0.05
      pos = (0, -.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Extremely = 4
        Very much = 3
        Somewhat = 2
        A little bit = 1
        Not at all = 0
    KeyboardComponent DSSQ_resp
      allowedKeys = '0','1','2','3','4','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine DSSQ_Post_Inst
    TextComponent text_DSSQ_post_inst
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Next, please answer the following questions about your attitude TO THE TASK YOU HAVE JUST DONE. Rate your agreement with the following statements by circling one of the following answers:

        Extremely = 4
        Very much = 3
        Somewhat = 2
        A little bit = 1
        Not at all = 0

        (SPACEBAR to start)
    KeyboardComponent key_resp_DSSQ_post_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine DSSQ_think_inst
    TextComponent text_DSSQ_think_inst
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This next set of questions concerns the kinds of thoughts that go through people's heads at particular times, for example while they are doing some task or activity.

        Please indicate roughly how often you had each thought WHILE PERFORMING THE TASK, by circling a number from the list below.
        1 = Never
        2 = Once
        3 = A few times
        4 = Often
        5 = Very often

        (SPACEBAR to start)
    KeyboardComponent key_resp_DSSQ_think_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine DSSQ_think
    TextComponent DSSQ_think_text
      letterHeight = 0.05
      pos = (0, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $DSSQ_think_item
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    TextComponent DSSQ_think_scale
      letterHeight = 0.05
      pos = (0, -.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1 = Never
        2 = Once
        3 = A few times
        4 = Often
        5 = Very often
    KeyboardComponent DSSQ_think_resp
      allowedKeys = '1','2','3','4','5','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Feedback
    CodeComponent code_gain
      Code Type = Auto->JS
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      Begin Experiment:
        bonus = 0
      Begin Routine:
        targetgain = 0
        nontargetgain = 0
        totalgain = 0

        #calculate how much they win for target hits
        if rightcall_rate_trial <= 0.5:
            targetgain = 0
        else:
            targetgain = round((rightcall_trial-8)/8*0.5,2)

        #calculate how much they win for non-target hits
        if correctrejection_rate_trial <= 0.5:
            nontargetgain = 0
        else:
            nontargetgain = round(((59-falsealarm_trial)/59)*0.5,2)

        #add the two amounts together
        totalgain = targetgain + nontargetgain
      End Routine:
        numcorr_trial=0
        rightcall_trial=0
        falsealarm_trial=0
        correctrate_trial = 0
        rightcall_rate_trial = 0
        correctrejection_rate_trial = 0
    CodeComponent code_loss
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        bonus = 10
      Begin Routine:
        targetloss = 0
        nontargetloss = 0
        totalloss = 0

        #calculate how much they lose for target mistakes
        if rightcall_rate_trial <= 0.5:
            targetloss = 0.5
        else:
            targetloss = round((1-(rightcall_rate_trial - 0.5)/0.5)*0.5,2)

        #calculate how much they lose for non-target mistakes
        if correctrejection_rate_trial <= 0.5:
            nontargetloss = 0.5
        else:
            nontargetloss = round((falsealarm_trial/59)*0.5,2)

        #add the two amounts together
        totalloss = targetloss + nontargetloss
      End Routine:
        numcorr_trial=0
        rightcall_trial=0
        falsealarm_trial=0
        correctrate_trial = 0
        rightcall_rate_trial = 0
        correctrejection_rate_trial = 0
    TextComponent text_feedback
      letterHeight = 0.07
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_original
      letterHeight = 0.07
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_rectangle
      fillColor = green
      lineColor = green
      pos = (0, -0.05)
      saveStartStop = False
      shape = rectangle
      size = (0.05, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_triangle
      fillColor = green
      lineColor = green
      ori = 180
      pos = (0, -0.15)
      saveStartStop = False
      shape = triangle
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_current
      letterHeight = 0.07
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = gain.png
      pos = (0.4,-0.3)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_loss
      letterHeight = 0.07
      pos = (0.65,-0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_msg_loss
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        text_feedback.text = "Sadly, because of the errors you made during this trial, you LOST " + str(totalloss) + " dollars."
        text_original.text = "$" + str(bonus)
        text_current.text = "$" + str(bonus - totalloss)
        text_loss.text = "$" + str(totalloss)
      End Routine:
        bonus = bonus - totalloss
    KeyboardComponent key_resp_feedback
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_continue
      letterHeight = 0.06
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press “c” to continue
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    CodeComponent code_msg_gain
      Code Type = Auto->JS
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      Begin Routine:
        text_feedback.text = "Congratulations! Because of the correct responses you made during this trial, you WON " + str(totalgain) + " dollar."
        text_original.text = "$" + str(bonus)
        text_current.text = "$" + str(bonus + totalgain)
        text_loss.text = "$" + str(totalgain)

        thisExp.addData('oldtotal', bonus)
        thisExp.addData('totalgain', totalgain)
        thisExp.addData('newtotal', bonus+totalgain)
      End Routine:
        bonus = bonus +totalgain
    CodeComponent code_msg_control
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        correctpercent = round(correctrate_trial*100,0)
        text_feedback.text = "Thank you! You had " + str(correctpercent) + "% correct and " + str(100-correctpercent) + "% errors in this trial."
      End Routine:
        numcorr_trial=0
        rightcall_trial=0
        falsealarm_trial=0
        correctrate_trial = 0
        rightcall_rate_trial = 0
        correctrejection_rate_trial = 0
    CodeComponent code_points
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        text_feedback.text = "Congratulations! Because of the correct responses you made during this trial, you WON " + str(int(totalgain*100)) + " points."
        text_original.text = str(int(bonus*100)) + " points"
        text_current.text = str(int((bonus + totalgain)*100)) + " points"
        text_loss.text = str(int(totalgain*100))

        newtotal = (bonus+totalgain)*100

        thisExp.addData('oldtotal', bonus*100)
        thisExp.addData('totalgain', totalgain*100)
        thisExp.addData('newtotal', newtotal)
      End Routine:
        bonus = bonus +totalgain
  Routine IncentiveInfo
    KeyboardComponent key_resp_incentive
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_incentive
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You can earn up to 10 dollars as bonus money by making as many correct responses as you can.

        If all of your responses are correct, you could get the whole of 10 dollars!

        You will be paid through Prolific after you complete the experiment and your data has been reviewed.


        Press <space> to continue
    TextComponent newIncentiveText
      disabled = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You can earn up to 1000 points during the experiment by making as many correct responses as you can.

        If all of your correct responses are correct, you could get the whole of 1000 points! Try your best to earn the most points!

        Press <space> to continue
  Routine Instr1_2
    KeyboardComponent key_resp_intro_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_intro_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Here are a couple of examples of the standard, shorter duration.  During the task, press “F” AFTER these trials, during the response period, with the question mark on the screen (not while the picture is still being presented).

        You don’t need to press anything during these examples.

        Press the spacebar to see the examples.
  Routine Instr
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        prac=0
    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_intro
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome, and thank you very much for taking part in this study!

        We are interested in how different factors affect people’s ability to stay focused on a task, and how that influences their perception of time.


        Please press the spacebar to go to the next screen.
  Routine Instr1
    KeyboardComponent key_resp_intro_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_intro_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        We’ll start with an easy version to make sure the instructions are clear.

        In this training session, the shorter time will be 800 milliseconds, and the longer time will be 1600 milliseconds.

        Press the spacebar to go to the next screen.
  Routine Instr1_3
  Routine Run
    TextComponent runtext
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        runNum = 0
      Begin Routine:
        runNum += 1
        runtext.text = "Run " + str(runNum)
Flow
  LoopInitiator skip loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Instr
    Routine Consent1
    Routine SIPI_inst
    LoopInitiator SIPI_loop loopType="TrialHandler"
      conditionsFile = SIPI.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'SIPI_num': 1, 'SIPI_item': 'I find that I easily lose interest in things that I have to do.'},
        {'SIPI_num': 2, 'SIPI_item': 'My mind seldom wanders from my work.'},
        {'SIPI_num': 3, 'SIPI_item': 'I tend to be easily bored.'},
        {'SIPI_num': 4, 'SIPI_item': 'My thoughts seldom drift from the subject before me.'},
        {'SIPI_num': 5, 'SIPI_item': 'I am the kind of person whose thoughts often wander.'},
        {'SIPI_num': 6, 'SIPI_item': 'I can work at something for a long time without feeling the least bit bored or restless.'},
        {'SIPI_num': 7, 'SIPI_item': 'No matter how hard I try to concentrate, thoughts unrelated to my work always creep in.'},
        {'SIPI_num': 8, 'SIPI_item': 'I tend to be quite wrapped up and interested in whatever I am doing.'},
        {'SIPI_num': 9, 'SIPI_item': 'I have difficulty in maintaining concentration for long periods of time.'},
        {'SIPI_num': 10, 'SIPI_item': 'I am seldom bored.'},
        {'SIPI_num': 11, 'SIPI_item': 'Faced with a tedious job, I notice all the other things around me that I could be doing.'},
        {'SIPI_num': 12, 'SIPI_item': 'I find it hard to read when someone is on the telephone in a neighboring room.'},
        {'SIPI_num': 13, 'SIPI_item': 'I find it difficult to concentrate when the TV or radio is on.'},
        {'SIPI_num': 14, 'SIPI_item': 'My ability to concentrate is not impaired by someone talking in another part of my house or apartment.'},
        {'SIPI_num': 15, 'SIPI_item': 'I am not easily distracted.'}]
      Routine SIPI
    LoopTerminator SIPI_loop
    Routine PAS_inst
    LoopInitiator PAS_loop1 loopType="TrialHandler"
      conditionsFile = PAS.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'PAS_num': 1, 'PAS_item': 'Active'},
        {'PAS_num': 2, 'PAS_item': 'Drowsy'},
        {'PAS_num': 3, 'PAS_item': 'Exhausted'},
        {'PAS_num': 4, 'PAS_item': 'Lively'},
        {'PAS_num': 5, 'PAS_item': 'Sleepy'},
        {'PAS_num': 6, 'PAS_item': 'Vigorous'},
        {'PAS_num': 7, 'PAS_item': 'Alert'},
        {'PAS_num': 8, 'PAS_item': 'Dull'},
        {'PAS_num': 9, 'PAS_item': 'Fatigued'},
        {'PAS_num': 10, 'PAS_item': 'Powerful'},
        {'PAS_num': 11, 'PAS_item': 'Slow'},
        {'PAS_num': 12, 'PAS_item': 'Weak'},
        {'PAS_num': 13, 'PAS_item': 'Aroused'},
        {'PAS_num': 14, 'PAS_item': 'Energetic'},
        {'PAS_num': 15, 'PAS_item': 'Forceful'},
        {'PAS_num': 16, 'PAS_item': 'Quiet'},
        {'PAS_num': 17, 'PAS_item': 'Sluggish'},
        {'PAS_num': 18, 'PAS_item': 'Weary'},
        {'PAS_num': 19, 'PAS_item': 'Depressed'},
        {'PAS_num': 20, 'PAS_item': 'Excited'},
        {'PAS_num': 21, 'PAS_item': 'Inactive'},
        {'PAS_num': 22, 'PAS_item': 'Sharp'},
        {'PAS_num': 23, 'PAS_item': 'Tired'},
        {'PAS_num': 24, 'PAS_item': 'Worn-Out'}]
      Routine PAS
    LoopTerminator PAS_loop1
    Routine Training_Easy_Instr
    Routine Instr1
    Routine Instr2
    LoopInitiator short_easy loopType="TrialHandler"
      conditionsFile = example_short_easy.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'StimulusDuration': 0.8, 'ResponseDuration': 0.94, 'Stim': 'dandelion3.jpg'},
        {'StimulusDuration': 0.8, 'ResponseDuration': 0.96, 'Stim': 'daisy21.jpg'},
        {'StimulusDuration': 0.8, 'ResponseDuration': 0.98, 'Stim': 'sunflower2.jpg'}]
      Routine Example_short_easy
    LoopTerminator short_easy
    Routine Instr3
    LoopInitiator long_easy loopType="TrialHandler"
      conditionsFile = example_long_easy.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'StimulusDuration': 1.6, 'ResponseDuration': 0.94, 'Stim': 'dandelion27.jpg'},
        {'StimulusDuration': 1.6, 'ResponseDuration': 0.96, 'Stim': 'daisy14.jpg'},
        {'StimulusDuration': 1.6, 'ResponseDuration': 0.98, 'Stim': 'rose18.jpg'}]
      Routine Example_long_easy
    LoopTerminator long_easy
    Routine Instr4
    LoopInitiator sandwich_easy loopType="TrialHandler"
      conditionsFile = example_sandwich_easy.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'StimulusDuration': 0.8, 'ResponseDuration': 0.94, 'Stim': 'dandelion17.jpg'},
        {'StimulusDuration': 1.6, 'ResponseDuration': 0.96, 'Stim': 'daisy19.jpg'},
        {'StimulusDuration': 0.8, 'ResponseDuration': 0.98, 'Stim': 'rose24.jpg'}]
      Routine Example_sandwich_easy
    LoopTerminator sandwich_easy
    Routine Training_Easy_Start
    LoopInitiator easy_repeat loopType="TrialHandler"
      conditionsFile = chooseEasyTraining.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'condsFile': 'training_easy1.xlsx'},
        {'condsFile': 'training_easy2.xlsx'}]
      LoopInitiator loop_redo1 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = prac
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        Routine pracRedo
      LoopTerminator loop_redo1
      LoopInitiator loop_easy loopType="TrialHandler"
        conditionsFile = $condsFile
        loopType = sequential
        nReps = 1
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        Routine Training_Easy
      LoopTerminator loop_easy
      Routine Training_Easy_Feedback
    LoopTerminator easy_repeat
  LoopTerminator skip
  LoopInitiator aftereasy_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = aftereasy_loop_rep
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    Routine Training_Normal_Instr
    LoopInitiator sandwich_normal loopType="TrialHandler"
      conditionsFile = example_sandwich_normal.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'StimulusDuration': 0.8, 'ResponseDuration': 0.94, 'Stim': 'sunflower6.jpg'},
        {'StimulusDuration': 1.07, 'ResponseDuration': 0.96, 'Stim': 'dandelion23.jpg'},
        {'StimulusDuration': 0.8, 'ResponseDuration': 0.98, 'Stim': 'dandelion20.jpg'}]
      Routine Example_sandwich_normal
    LoopTerminator sandwich_normal
    Routine Training_Normal_Start
    LoopInitiator normal_repeat loopType="TrialHandler"
      conditionsFile = chooseNormalTraining.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'condsFile': 'training_normal1.xlsx'},
        {'condsFile': 'training_normal2.xlsx'},
        {'condsFile': 'training_normal3.xlsx'},
        {'condsFile': 'training_normal4.xlsx'}]
      LoopInitiator loop_redo2 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = prac
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        Routine pracRedo
      LoopTerminator loop_redo2
      LoopInitiator loop_normal loopType="TrialHandler"
        conditionsFile = $condsFile
        loopType = sequential
        nReps = 1
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        Routine Training_Normal
      LoopTerminator loop_normal
      Routine Training_Normal_Feedback
    LoopTerminator normal_repeat
    LoopInitiator afternormal_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = afternormal_loop_rep
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      Routine Instr5
      Routine IncentiveInfo
      Routine Instr6
      LoopInitiator outer loopType="TrialHandler"
        conditionsFile = chooseBlock.xlsx
        isTrials = False
        loopType = sequential
        nReps = 1
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        conditions:
          [{'condsFile': 'block1.xlsx'},
          {'condsFile': 'block2.xlsx'},
          {'condsFile': 'block3.xlsx'},
          {'condsFile': 'block4.xlsx'},
          {'condsFile': 'block5.xlsx'},
          {'condsFile': 'block6.xlsx'},
          {'condsFile': 'block7.xlsx'},
          {'condsFile': 'block8.xlsx'},
          {'condsFile': 'block9.xlsx'},
          {'condsFile': 'block10.xlsx'}]
        Routine Run
        LoopInitiator inner loopType="TrialHandler"
          conditionsFile = $condsFile
          loopType = sequential
          nReps = 1
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          Routine Trial
        LoopTerminator inner
        Routine Feedback
        Routine NASA_inst
        LoopInitiator NASA_loop loopType="TrialHandler"
          conditionsFile = NASA.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [{'nasa_item': 'Mental Demand', 'nasa_question': 'How mentally demanding was the task?', 'scale_left': 'Very Low', 'scale_right': 'Very High'},
            {'nasa_item': 'Physical Demand', 'nasa_question': 'How physically demanding was the task?', 'scale_left': 'Very Low', 'scale_right': 'Very High'},
            {'nasa_item': 'Temporal Demand', 'nasa_question': 'How hurried or rushed was the pace of the task?', 'scale_left': 'Very Low', 'scale_right': 'Very High'},
            {'nasa_item': 'Performance', 'nasa_question': 'How successful were you in accomplishing what you were asked to do?\n(NOTE: "Perfect" is on left, "Failure" is on right)', 'scale_left': 'Perfect', 'scale_right': 'Failure'},
            {'nasa_item': 'Effort', 'nasa_question': 'How hard did you have to work to accomplish your level of performance?', 'scale_left': 'Very Low', 'scale_right': 'Very High'},
            {'nasa_item': 'Frustration', 'nasa_question': 'How insecure, discouraged, irritated, stressed, and annoyed were you?', 'scale_left': 'Very Low', 'scale_right': 'Very High'},
            {'nasa_item': 'Arousal', 'nasa_question': 'How alert, active, and energetic were you feeling during the task?', 'scale_left': 'Very Low', 'scale_right': 'Very High'},
            {'nasa_item': 'Distraction', 'nasa_question': 'How distracted were you during the task?', 'scale_left': 'Very Low', 'scale_right': 'Very High'},
            {'nasa_item': 'Motivation', 'nasa_question': 'How motivated were you during the task?', 'scale_left': 'Very Low', 'scale_right': 'Very High'}]
          Routine NASA
        LoopTerminator NASA_loop
        Routine Break
      LoopTerminator outer
      Routine Final1
      Routine PAS_inst
      LoopInitiator PAS_loop2 loopType="TrialHandler"
        conditionsFile = PAS.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'PAS_num': 1, 'PAS_item': 'Active'},
          {'PAS_num': 2, 'PAS_item': 'Drowsy'},
          {'PAS_num': 3, 'PAS_item': 'Exhausted'},
          {'PAS_num': 4, 'PAS_item': 'Lively'},
          {'PAS_num': 5, 'PAS_item': 'Sleepy'},
          {'PAS_num': 6, 'PAS_item': 'Vigorous'},
          {'PAS_num': 7, 'PAS_item': 'Alert'},
          {'PAS_num': 8, 'PAS_item': 'Dull'},
          {'PAS_num': 9, 'PAS_item': 'Fatigued'},
          {'PAS_num': 10, 'PAS_item': 'Powerful'},
          {'PAS_num': 11, 'PAS_item': 'Slow'},
          {'PAS_num': 12, 'PAS_item': 'Weak'},
          {'PAS_num': 13, 'PAS_item': 'Aroused'},
          {'PAS_num': 14, 'PAS_item': 'Energetic'},
          {'PAS_num': 15, 'PAS_item': 'Forceful'},
          {'PAS_num': 16, 'PAS_item': 'Quiet'},
          {'PAS_num': 17, 'PAS_item': 'Sluggish'},
          {'PAS_num': 18, 'PAS_item': 'Weary'},
          {'PAS_num': 19, 'PAS_item': 'Depressed'},
          {'PAS_num': 20, 'PAS_item': 'Excited'},
          {'PAS_num': 21, 'PAS_item': 'Inactive'},
          {'PAS_num': 22, 'PAS_item': 'Sharp'},
          {'PAS_num': 23, 'PAS_item': 'Tired'},
          {'PAS_num': 24, 'PAS_item': 'Worn-Out'}]
        Routine PAS
      LoopTerminator PAS_loop2
      Routine DSSQ_think_inst
      LoopInitiator DSSQ_think_loop loopType="TrialHandler"
        conditionsFile = DSSQ_think.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'DSSQ_think_num': 1, 'DSSQ_think_item': 'I thought about how I should work more carefully. '},
          {'DSSQ_think_num': 2, 'DSSQ_think_item': 'I thought about how much time I had left. '},
          {'DSSQ_think_num': 3, 'DSSQ_think_item': 'I thought about how others have done on this task. '},
          {'DSSQ_think_num': 4, 'DSSQ_think_item': 'I thought about the difficulty of the problems. '},
          {'DSSQ_think_num': 5, 'DSSQ_think_item': 'I thought about my level of ability. '},
          {'DSSQ_think_num': 6, 'DSSQ_think_item': 'I thought about the purpose of the experiment. '},
          {'DSSQ_think_num': 7, 'DSSQ_think_item': 'I thought about how I would feel if I were told how I performed. '},
          {'DSSQ_think_num': 8, 'DSSQ_think_item': 'I thought about how often I get confused. '},
          {'DSSQ_think_num': 9, 'DSSQ_think_item': 'I thought about members of my family. '},
          {'DSSQ_think_num': 10, 'DSSQ_think_item': 'I thought about something that made me feel guilty. '},
          {'DSSQ_think_num': 11, 'DSSQ_think_item': 'I thought about personal worries. '},
          {'DSSQ_think_num': 12, 'DSSQ_think_item': 'I thought about something that made me feel angry. '},
          {'DSSQ_think_num': None, 'DSSQ_think_item': 'It is important that you stay focused in this study. Please press 4 for this question'},
          {'DSSQ_think_num': 13, 'DSSQ_think_item': 'I thought about something that happened earlier today. '},
          {'DSSQ_think_num': 14, 'DSSQ_think_item': 'I thought about something that happened in the recent past \n(last few days, but not today). '}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
        Routine DSSQ_think
      LoopTerminator DSSQ_think_loop
    LoopTerminator afternormal_loop
  LoopTerminator aftereasy_loop
  Routine Final2
